CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:404
GitHash:
ModuleCount:40
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:No

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch00.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01.tif")
    Name to assign these images:TH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02.tif")
    Name to assign these images:MAP2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch03.tif")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "Merged.tif")
    Name to assign these images:Merged
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Merged
    Conversion method:Combine
    Image type:RGB
    Name the output image:Merged_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ConvertObjectsToImage:[module_num:6|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enabled:False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
    Name the output image:CellImage
    Select the color format:Color
    Select the colormap:Default

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Merged_Gray
    Name the primary objects to be identified:Organoid_Area_identify
    Typical diameter of objects, in pixel units (Min,Max):2000,1000000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:8|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notes:['The dna channel, e.g. DAPI, is perfect for segmenting individual cells. Given that these cells are well spaced, declumping cells by shape is effective.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Ki67
    Name the primary objects to be identified:Ki67
    Typical diameter of objects, in pixel units (Min,Max):5,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:10|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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:DAPI
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Ki67
    Name the output image:Ki67_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#07F80E
    Select objects to display:Ki67

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:Nuclei_overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:#07F80E
    Select objects to display:Nuclei

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Ki67
    Name the output image:Ki67_Objects
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:14|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_count
    Select the color format:Color
    Select the colormap:Default

ConvertObjectsToImage:[module_num:15|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
    Select the input objects:Organoid_Area_identify
    Name the output image:Organoid_mask
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:Organoid_mask
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merged
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MaskImage:[module_num:17|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
    Select the input image:DAPI
    Name the output image:Mask_DAPI
    Use objects or an image as a mask?:Image
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    Select image for mask:Organoid_mask
    Invert the mask?:No

MaskImage:[module_num:18|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
    Select the input image:TH
    Name the output image:Mask_TH
    Use objects or an image as a mask?:Image
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    Select image for mask:Organoid_mask
    Invert the mask?:No

MaskImage:[module_num:19|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
    Select the input image:MAP2
    Name the output image:Mask_MAP2
    Use objects or an image as a mask?:Image
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    Select image for mask:Organoid_mask
    Invert the mask?:No

MaskImage:[module_num:20|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
    Select the input image:Ki67
    Name the output image:Mask_Ki67
    Use objects or an image as a mask?:Image
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    Select image for mask:Organoid_mask
    Invert the mask?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Ki67_Objects
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ki67
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Ki67_objects
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:Ki67_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ki67
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Ki67_overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_count
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Nuclei_count
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Nuclei_overlay
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureColocalization:[module_num:25|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
    Select images to measure:Ki67, TH, MAP2, DAPI
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Accurate

MedianFilter:[module_num:26|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
    Select the input image:Mask_DAPI
    Name the output image:MedianFilter_DAPI
    Window:3

MedianFilter:[module_num:27|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
    Select the input image:Mask_TH
    Name the output image:MedianFilter_TH
    Window:3

MedianFilter:[module_num:28|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
    Select the input image:Mask_MAP2
    Name the output image:MedianFilter_MAP2
    Window:3

MedianFilter:[module_num:29|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
    Select the input image:Mask_Ki67
    Name the output image:MedianFilter_Ki67
    Window:3

Threshold:[module_num:30|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
    Select the input image:MedianFilter_DAPI
    Name the output image:Threshold_DAPI
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.06,1.0
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    Two-class or three-class thresholding?:Two classes
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
Threshold:[module_num:31|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
    Select the input image:MedianFilter_TH
    Name the output image:Threshold_TH
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.06,1.0
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    Two-class or three-class thresholding?:Two classes
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
Threshold:[module_num:32|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
    Select the input image:MedianFilter_MAP2
    Name the output image:Threshold_MAP2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.06,1.0
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    Two-class or three-class thresholding?:Two classes
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
Threshold:[module_num:33|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
    Select the input image:MedianFilter_Ki67
    Name the output image:Threshold_Ki67
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.06,1.0
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    Two-class or three-class thresholding?:Two classes
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Threshold_DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_threshold
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Threshold_TH
    Select method for constructing file names:From image filename
    Select image name for file prefix:TH
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_threshold
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:36|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
    Select the type of image to save:Image
    Select the image to save:Threshold_MAP2
    Select method for constructing file names:From image filename
    Select image name for file prefix:MAP2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_threshold
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:37|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
    Select the type of image to save:Image
    Select the image to save:Threshold_Ki67
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ki67
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_threshold
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageIntensity:[module_num:38|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
    Select images to measure:Threshold_MAP2, Threshold_TH, Threshold_DAPI, Threshold_Ki67
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageAreaOccupied:[module_num:39|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
    Measure the area occupied by:Both
    Select binary images to measure:Threshold_MAP2, Threshold_TH, Threshold_DAPI, Threshold_Ki67
    Select object sets to measure:Organoid_Area_identify

ExportToSpreadsheet:[module_num:40|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop\\test_images_camille\\results2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Ki67,Image|Count_Nuclei,Image|AreaOccupied_AreaOccupied_Threshold_DAPI,Image|AreaOccupied_AreaOccupied_Threshold_Ki67,Image|AreaOccupied_AreaOccupied_Threshold_MAP2,Image|AreaOccupied_AreaOccupied_Threshold_TH,Image|AreaOccupied_AreaOccupied_Organoid_Area_identify,Image|Frame_DAPI,Image|Frame_MAP2,Image|Frame_TH,Image|Frame_Ki67,Image|FileName_DAPI,Image|FileName_MAP2,Image|FileName_TH,Image|FileName_Ki67,Image|Correlation_Slope_DAPI_MAP2,Image|Correlation_Slope_DAPI_Ki67,Image|Correlation_Slope_DAPI_TH,Image|Correlation_Slope_MAP2_Ki67,Image|Correlation_Slope_TH_MAP2,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:M100_
    Overwrite existing files without warning?:Yes
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